PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'design': '1', 'position': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = configural_featural
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser=window;

        random=Math.random;
        randint=function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }

        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }
        console.log(shuffle_array([1,2,3,3]))

        function divide_subPoint1(array, divisor) {
            let array_divided = array.map(function(element) {
                return element/divisor - 0.1;
            });
            return array_divided
        }

        function round_array(array) {
            array = array.map(function(each_element){
                return Math.round(each_element);
            });
            return array
        }

        psychoJS.downloadResources([{name: ("Stimuli/greenCheck.png"), path:("Stimuli/greenCheck.png")},
        {name: ("Stimuli/redWrong.png"), path:("Stimuli/redWrong.png")},
        {name: ("Stimuli/edmd.png"), path:("Stimuli/edmd.png")},
        {name: ("Stimuli/eimd.png"), path:("Stimuli/eimd.png")},
        {name: ("Stimuli/eomu.png"), path:("Stimuli/eomu.png")},
        {name: ("Stimuli/eumu.png"), path:("Stimuli/eumu.png")},
        {name: ("Stimuli/f15.png"), path:("Stimuli/f15.png")},
        {name: ("Stimuli/f24.png"), path:("Stimuli/f24.png")},
        {name: ("Stimuli/f131.png"), path:("Stimuli/f131.png")},
        {name: ("Stimuli/f142.png"), path:("Stimuli/f142.png")},
        {name: ("Stimuli/H-8sim0.png"), path:("Stimuli/H-8sim0.png")},
        {name: ("Stimuli/H-8sim1.png"), path:("Stimuli/H-8sim1.png")},
        {name: ("Stimuli/H-8sim2.png"), path:("Stimuli/H-8sim2.png")},
        {name: ("Stimuli/H-8sim3.png"), path:("Stimuli/H-8sim3.png")},
        {name: ("Stimuli/H5sim0.png"), path:("Stimuli/H5sim0.png")},
        {name: ("Stimuli/H6sim0.png"), path:("Stimuli/H6sim0.png")},
        {name: ("Stimuli/H7sim0.png"), path:("Stimuli/H7sim0.png")},
        {name: ("Stimuli/H8sim0.png"), path:("Stimuli/H8sim0.png")},
        {name: ("Stimuli/dory1.png"), path:("Stimuli/dory1.png")},
        {name: ("Stimuli/dory2.png"), path:("Stimuli/dory2.png")},
        {name: ("Stimuli/nemo1.jpg"), path:("Stimuli/nemo1.jpg")},
        {name: ("Stimuli/nemo2.png"), path:("Stimuli/nemo2.png")},
        {name: ("Designs/design1.csv"), path:("Designs/design1.csv")},
        {name: ("Designs/design2.csv"), path:("Designs/design2.csv")},
        {name: ("Designs/design3.csv"), path:("Designs/design3.csv")},
        {name: ("Designs/design4.csv"), path:("Designs/design4.csv")},
        {name: ("Designs/design5.csv"), path:("Designs/design5.csv")},
        {name: ("Designs/design6.csv"), path:("Designs/design6.csv")},
        {name: ("Designs/design7.csv"), path:("Designs/design7.csv")},
        {name: ("Designs/design8.csv"), path:("Designs/design8.csv")},
        {name: ("Designs/instructions_face_1234.png"), path:("Designs/instructions_face_1234.png")},
        {name: ("Designs/instructions_face_5678.png"), path:("Designs/instructions_face_5678.png")},
        {name: ("Designs/instructions_haus_1234.png"), path:("Designs/instructions_haus_1234.png")},
        {name: ("Designs/instructions_haus_5678.png"), path:("Designs/instructions_haus_5678.png")}]);

        expInfo['OS'] = window.navigator.platform;
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    CodeComponent code_Py
      Code Type = Py
      Begin Experiment:
        from numpy.random import permutation
        from numpy.random import shuffle
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        # h = tan(degrees = 2) x (distance = 49.53)
        height = 3.459
        width = 3.459
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Resize this image to match the size of a credit card with arrow keys
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    TextComponent text_bottom
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Space when you’re finished
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    ImageComponent ccimage
      image = bankcard.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine target_img
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        img_pair = 0
        target = 0
        probe = 0
        corr = 0
        trialID = trialID + 1

        if fix_switch[trialID] == 1:
            if fix_color == "pink":
                fix_color = fix_color_options[1]
            else:
                fix_color = fix_color_options[0]

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            if trial_order[trialID]==1:
                sameTrialid += 1
                if side_same[sameTrialid] == 1: #left
                    xPosition = -(width*x_scale)
                    sameTrial_left_id += 1
                    print('left same ID: ' + str(sameTrial_left_id))
                    target = paths[trialSame_left[sameTrial_left_id]]
                    probe = paths[trialSame_left[sameTrial_left_id]]
                    if int(expInfo['design']) < 5:
                        corr = 'f'
                    elif int(expInfo['design']) > 4:
                        corr = 'j'
                elif side_same[sameTrialid] == 0: #right
                    xPosition = width*x_scale
                    sameTrial_right_id += 1
                    print('right same ID: ' + str(sameTrial_right_id))
                    target = paths[trialSame_right[sameTrial_right_id]]
                    probe = paths[trialSame_right[sameTrial_right_id]]
                    if int(expInfo['design']) < 5:
                        corr = 'f'
                    elif int(expInfo['design']) > 4:
                        corr = 'j'
            elif trial_order[trialID]==0:
                diffTrialid += 1
                if side_diff[diffTrialid] == 1: #left
                    xPosition = -(width*x_scale)
                    diffTrial_left_id += 1
                    print('left diff ID: ' + str(diffTrial_left_id))
                    img_pair = trialDiff_left[diffTrial_left[diffTrial_left_id]]
                    target = paths[img_pair[0]]
                    probe = paths[img_pair[1]]
                    if int(expInfo['design']) < 5:
                        corr = 'j'
                    elif int(expInfo['design']) > 4:
                        corr = 'f'
                elif side_diff[diffTrialid] == 0: #right
                    xPosition = width*x_scale
                    diffTrial_right_id += 1
                    print('right diff ID: ' + str(diffTrial_right_id))
                    img_pair = trialDiff_right[diffTrial_right[diffTrial_right_id]]
                    target = paths[img_pair[0]]
                    probe = paths[img_pair[1]]
                    if int(expInfo['design']) < 5:
                        corr = 'j'
                    elif int(expInfo['design']) > 4:
                        corr = 'f'
        elif int(expInfo['position']) == 1:
            xPosition = -(width*x_scale)
            if trial_order[trialID]==1:
                sameTrialid += 1
                target = paths[trialSame[sameTrialid]]
                probe = paths[trialSame[sameTrialid]]
                if int(expInfo['design']) < 5:
                    corr = 'f'
                elif int(expInfo['design']) > 4:
                    corr = 'j'
            elif trial_order[trialID]==0:
                diffTrialid += 1
                img_pair = trialDiff[diffTrial[diffTrialid]]
                target = paths[img_pair[0]]
                probe = paths[img_pair[1]]
                if int(expInfo['design']) < 5:
                    corr = 'j'
                elif int(expInfo['design']) > 4:
                    corr = 'f'
        elif expInfo['position'] == '3':
            xPosition = width*x_scale
            if trial_order[trialID]==1:
                sameTrialid += 1
                target = paths[trialSame[sameTrialid]]
                probe = paths[trialSame[sameTrialid]]
                if int(expInfo['design']) < 5:
                    corr = 'f'
                elif int(expInfo['design']) > 4:
                    corr = 'j'
            elif trial_order[trialID]==0:
                diffTrialid += 1
                img_pair = trialDiff[diffTrial[diffTrialid]]
                target = paths[img_pair[0]]
                probe = paths[img_pair[1]]
                if int(expInfo['design']) < 5:
                    corr = 'j'
                elif int(expInfo['design']) > 4:
                    corr = 'f'

        thisExp.addData('fix_switches', fix_switch[trialID])
        thisExp.addData('side', xPosition)
        thisExp.addData('trial_type1S0D',trial_order[trialID])
        thisExp.addData('target',target)
        thisExp.addData('probe',probe)
    TextComponent text_4
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    ImageComponent target_image
      image [set every repeat] = $target
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine probe_img
    CodeComponent code_5
      Code Type = Auto->JS
    TextComponent text_5
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    ImageComponent probe_image
      image [set every repeat] = $probe
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    KeyboardComponent key_resp_5
      allowedKeys = 'space',
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine startInstruct
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        fix_color_options = ["white","black"];

        if int(expInfo['design']) == 1:
            design_file = 'Designs/design1.csv'
        elif int(expInfo['design']) == 2:
            design_file = 'Designs/design2.csv'
        elif int(expInfo['design']) == 3:
            design_file = 'Designs/design3.csv'
        elif int(expInfo['design']) == 4:
            design_file = 'Designs/design4.csv'
        elif int(expInfo['design']) == 5:
            design_file = 'Designs/design5.csv'
        elif int(expInfo['design']) == 6:
            design_file = 'Designs/design6.csv'
        elif int(expInfo['design']) == 7:
            design_file = 'Designs/design7.csv'
        elif int(expInfo['design']) == 8:
            design_file = 'Designs/design8.csv'
    TextComponent text_3
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you are ready to play the game!

        You will be doing the same thing you just practiced, but with faces and houses.

        Press <SPACE> to see the instructions!
    KeyboardComponent key_resp_7
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_resp
    TextComponent text_2
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    KeyboardComponent key_resp_6
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine ISI_fix
    TextComponent text
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine instrBlock
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        // add-on: list(s: string): string[]
        function list(s) {
            // if s is a string, we return a list of its characters
            if (typeof s === 'string')
                return s.split('');
            else
                // otherwise we return s:
                return s;
        }

        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        function divide_subPoint1(array, divisor) {
            let array_divided = array.map(function(element) {
                return element/divisor - 0.1;
            });
            return array_divided
        }

        function round_array(array) {
            array = array.map(function(each_element){
                return Math.round(each_element);
            });
            return array
        }

        if ((Block_type === "conf_face")) {
            paths = ["Stimuli/edmd.png", "Stimuli/eimd.png", "Stimuli/eomu.png", "Stimuli/eumu.png"];
            if (((((Number.parseInt(expInfo["design"]) === (1 | Number.parseInt(expInfo["design"]))) && ((1 | Number.parseInt(expInfo["design"])) === (2 | Number.parseInt(expInfo["design"])))) && ((2 | Number.parseInt(expInfo["design"])) === (3 | Number.parseInt(expInfo["design"])))) && ((3 | Number.parseInt(expInfo["design"])) === 4))) {
                instruction_img = "Designs/instructions_face_1234.png";
            } else {
                instruction_img = "Designs/instructions_face_5678.png";
            }
        } else {
            if ((Block_type === "conf_haus")) {
                paths = ["Stimuli/H-8sim0.png", "Stimuli/H-8sim1.png", "Stimuli/H-8sim2.png", "Stimuli/H-8sim3.png"];
                if (((((Number.parseInt(expInfo["design"]) === (1 | Number.parseInt(expInfo["design"]))) && ((1 | Number.parseInt(expInfo["design"])) === (2 | Number.parseInt(expInfo["design"])))) && ((2 | Number.parseInt(expInfo["design"])) === (3 | Number.parseInt(expInfo["design"])))) && ((3 | Number.parseInt(expInfo["design"])) === 4))) {
                    instruction_img = "Designs/instructions_haus_1234.png";
                } else {
                    instruction_img = "Designs/instructions_haus_5678.png";
                }
            } else {
                if ((Block_type === "feat_face")) {
                    paths = ["Stimuli/f15.png", "Stimuli/f24.png", "Stimuli/f131.png", "Stimuli/f142.png"];
                    if (((((Number.parseInt(expInfo["design"]) === (1 | Number.parseInt(expInfo["design"]))) && ((1 | Number.parseInt(expInfo["design"])) === (2 | Number.parseInt(expInfo["design"])))) && ((2 | Number.parseInt(expInfo["design"])) === (3 | Number.parseInt(expInfo["design"])))) && ((3 | Number.parseInt(expInfo["design"])) === 4))) {
                        instruction_img = "Designs/instructions_face_1234.png";
                    } else {
                        instruction_img = "Designs/instructions_face_5678.png";
                    }
                } else {
                    if ((Block_type === "feat_haus")) {
                        paths = ["Stimuli/H5sim0.png", "Stimuli/H6sim0.png", "Stimuli/H7sim0.png", "Stimuli/H8sim0.png"];
                        if (((((Number.parseInt(expInfo["design"]) === (1 | Number.parseInt(expInfo["design"]))) && ((1 | Number.parseInt(expInfo["design"])) === (2 | Number.parseInt(expInfo["design"])))) && ((2 | Number.parseInt(expInfo["design"])) === (3 | Number.parseInt(expInfo["design"])))) && ((3 | Number.parseInt(expInfo["design"])) === 4))) {
                            instruction_img = "Designs/instructions_haus_1234.png";
                        } else {
                            instruction_img = "Designs/instructions_haus_5678.png";
                        }
                    }
                }
            }
        }

        trialSame = 0;
        trialDiff = 0;
        diffTrial = 0;
        sameTrialid = -1;
        diffTrialid = -1;
        sameTrial_left_id = -1;
        diffTrial_left_id = -1;
        sameTrial_right_id = -1;
        diffTrial_right_id = -1;
        trialID = -1;
        rand_start = shuffle_array([0,1]);
        fix_color = fix_color_options[rand_start[0]];

        if ((Number.parseInt(expInfo["position"]) === 2)) {
            console.log(numTrials)
            numTrials = 48;
            console.log(numTrials)
            trial_order = [shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]),shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6])].flat();
            trial_order = round_array(divide_subPoint1(trial_order,6))
            trialSame_left = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
            trialDiff_left = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
            diffTrial_left = shuffle_array(list([...Array(12).keys()]));
            trialSame_right = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
            trialDiff_right = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
            diffTrial_right = shuffle_array(list([...Array(12).keys()]));
            fix_switch = [0,0,shuffle_array([1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,0,0]),0,0].flat();
            side_same = shuffle_array([0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1]);
            side_diff = shuffle_array([0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1]);
        } else {
            if ((Number.parseInt(expInfo["position"]) === 1)) {
                numTrials = 24;
                trial_order = [shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6])].flat();
                trial_order = round_array(divide_subPoint1(trial_order,6))
                trialSame = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
                trialDiff = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
                diffTrial = shuffle_array(list([...Array(12).keys()]));
                fix_switch = [0,0,shuffle_array([1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]),0,0].flat();
                //        side = shuffle_array([1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1]);
            } else {
                if ((Number.parseInt(expInfo["position"]) === 3)) {
                    numTrials = 24;
                    trial_order = [shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6])].flat();
                    trial_order = round_array(divide_subPoint1(trial_order,6))
                    trialSame = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
                    trialDiff = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
                    diffTrial = shuffle_array(list([...Array(12).keys()]));
                    fix_switch = [0,0,shuffle_array([1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]),0,0].flat();
                    //            side = shuffle_array([0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]);
                }
            }
        }
      Begin Routine:
        if Block_type == 'conf_face':
            paths = ['Stimuli/edmd.png', 'Stimuli/eimd.png', 'Stimuli/eomu.png', 'Stimuli/eumu.png']
            if int(expInfo['design']) == 1 | int(expInfo['design']) == 2 | int(expInfo['design']) == 3 | int(expInfo['design']) == 4:
                instruction_img = 'Designs/instructions_face_1234.png'
            else:
                instruction_img = 'Designs/instructions_face_5678.png'
        elif Block_type == 'conf_haus':
            paths =  ['Stimuli/H-8sim0.png', 'Stimuli/H-8sim1.png', 'Stimuli/H-8sim2.png', 'Stimuli/H-8sim3.png']
            if int(expInfo['design']) == 1 | int(expInfo['design']) == 2 | int(expInfo['design']) == 3 | int(expInfo['design']) == 4:
                instruction_img = 'Designs/instructions_haus_1234.png'
            else:
                instruction_img = 'Designs/instructions_haus_5678.png'
        elif Block_type == 'feat_face':
            paths =  ['Stimuli/f15.png', 'Stimuli/f24.png', 'Stimuli/f131.png', 'Stimuli/f142.png']
            if int(expInfo['design']) == 1 | int(expInfo['design']) == 2 | int(expInfo['design']) == 3 | int(expInfo['design']) == 4:
                instruction_img = 'Designs/instructions_face_1234.png'
            else:
                instruction_img = 'Designs/instructions_face_5678.png'
        elif Block_type == 'feat_haus':
            paths = ['Stimuli/H5sim0.png', 'Stimuli/H6sim0.png', 'Stimuli/H7sim0.png', 'Stimuli/H8sim0.png']
            if int(expInfo['design']) == 1 | int(expInfo['design']) == 2 | int(expInfo['design']) == 3 | int(expInfo['design']) == 4:
                instruction_img = 'Designs/instructions_haus_1234.png'
            else:
                instruction_img = 'Designs/instructions_haus_5678.png'

        sameTrialid = -1
        diffTrialid = -1
        sameTrial_left_id = -1
        diffTrial_left_id = -1
        sameTrial_right_id = -1
        diffTrial_right_id = -1
        trialID = -1;
        rand_start = [0,1]
        shuffle(rand_start)
        fix_color = fix_color_options[rand_start[0]]

        if int(expInfo['position']) == 2:
            trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
            trial_order = np.round(trial_order / 6 - 0.1)
            trialSame_left = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff_left = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            trialSame_right = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff_right = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            diffTrial_left = list(range(12))
            shuffle(diffTrial_left)
            diffTrial_right = list(range(12))
            shuffle(diffTrial_right)
            numTrials = 48
            fixs_shuffled = [1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,0,0]
            shuffle(fixs_shuffled)
            fix_switch = [0,0]+fixs_shuffled+[0,0]
            side_same = [0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1]
            side_diff = [0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1]
            shuffle(side_same)
            shuffle(side_diff)
        elif int(expInfo['position']) == 1:
            trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
            trial_order = np.round(trial_order / 6 - 0.1)
            trialSame = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            diffTrial = list(range(12))
            shuffle(diffTrial)
            numTrials = 24
            fixs_shuffled = [1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]
            shuffle(fixs_shuffled)
            fix_switch = [0,0]+fixs_shuffled+[0,0]
        #    side = [1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1]
        elif int(expInfo['position']) == 3:
            trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
            trial_order = np.round(trial_order / 6 - 0.1)
            trialSame = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            diffTrial = list(range(12))
            shuffle(diffTrial)
            numTrials = 24
            fixs_shuffled = [1,1,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]
            shuffle(fixs_shuffled)
            fix_switch = [0,0]+fixs_shuffled+[0,0]
        #    side = [0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]
    ImageComponent instructions_image
      image [set every repeat] = $instruction_img
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine EndScreen
    TextComponent allDone
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You are all done. Thank you!
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  Routine feedback
    TextComponent good_job
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great Job!

        Press <SPACE> to keep going!
    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_target
    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        xPosition = "";
        if ((pfix_switch[pTrial] === 1)) {
            corrPfix = "space";
            if ((pfix_color === "white")) {
                pfix_color = pfix_color_options[1];
            } else {
                pfix_color = pfix_color_options[0];
            }
        } else {
            pfix_color = pfix_color;
            corrPfix = undefined;
        }
        if ((ptrial_order[pTrial] === 0)) {
            prac_target = prac_paths[samepTrials[sameCount]];
            prac_probe = prac_paths[samepTrials[sameCount]];
            if ((Number.parseInt(expInfo["design"]) < 5)) {
                pracCorr = "f";
            } else {
                if ((Number.parseInt(expInfo["design"]) > 4)) {
                    pracCorr = "j";
                }
            }
            sameCount = (sameCount + 1);
        } else {
            if ((ptrial_order[pTrial] === 1)) {
                prac_target = prac_paths[diffpTrials[diffCount][0]];
                prac_probe = prac_paths[diffpTrials[diffCount][1]];
                console.log(prac_paths);
                if ((Number.parseInt(expInfo["design"]) < 5)) {
                    pracCorr = "j";
                } else {
                    if ((Number.parseInt(expInfo["design"]) > 4)) {
                        pracCorr = "f";
                    }
                }
                console.log(prac_target);
                diffCount = (diffCount + 1);
            } else {
                console.log("What is going on");
            }
        }
        if ((Number.parseInt(expInfo["position"]) === 0)) {
            xPosition = 0;
        } else {
            if ((Number.parseInt(expInfo["position"]) === 2)) {
                if ((ptrial_order[pTrial] === 1)) {
                    if ((side_same_prac[samePTrialid] === 1)) {
                        xPosition = (- (width * x_scale));
                    } else {
                        if ((side_same_prac[samePTrialid] === 0)) {
                            xPosition = (width * x_scale);
                        }
                    }
                    samePTrialid += 1;
                } else {
                    if ((ptrial_order[pTrial] === 0)) {
                        if ((side_diff_prac[diffPTrialid] === 1)) {
                            xPosition = (- (width * x_scale));
                        } else {
                            if ((side_diff_prac[diffPTrialid] === 0)) {
                                xPosition = (width * x_scale);
                            }
                        }
                        diffPTrialid += 1;
                    }
                }
            } else {
                if ((Number.parseInt(expInfo["position"]) === 1)) {
                    xPosition = (- (width * x_scale));
                } else {
                    if ((Number.parseInt(expInfo["position"]) === "3")) {
                        xPosition = (width * x_scale);
                    }
                }
            }
        }

        thisExp.addData("pfix_switches", pfix_switch[pTrial])
        thisExp.addData("Pside", xPosition)
        thisExp.addData("ptrial_type1S0D",ptrial_order[pTrial])
        thisExp.addData("ptarget",prac_target)
        thisExp.addData("pprobe",prac_probe)
      Begin Routine:
        xPosition =''
        if pfix_switch[pTrial] == 1:
            corrPfix = 'space'
            if pfix_color == "white":
                pfix_color = pfix_color_options[1]
            else:
                pfix_color = pfix_color_options[0]
        else:
            pfix_color = pfix_color
            corrPfix = None

        if ptrial_order[pTrial] == 0:
            prac_target = prac_paths[samepTrials[sameCount]]
            prac_probe = prac_paths[samepTrials[sameCount]]
            if int(expInfo['design']) < 5:
                pracCorr = 'f'
            elif int(expInfo['design']) > 4:
                pracCorr = 'j'
            sameCount = sameCount + 1
        elif ptrial_order[pTrial] == 1:
            prac_target = prac_paths[diffpTrials[diffCount][0]]
            prac_probe = prac_paths[diffpTrials[diffCount][1]]
            print(pracCorr)
            if int(expInfo['design']) < 5:
                pracCorr = 'j'
            elif int(expInfo['design']) > 4:
                pracCorr = 'f'
            print(pracCorr)
            diffCount = diffCount + 1
        else:
            print('What is going on')

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            if ptrial_order[pTrial]==1:
                if side_same_prac[samePTrialid] == 1: #left
                    xPosition = -(width*x_scale)
                elif side_same_prac[samePTrialid] == 0: #right
                    xPosition = width*x_scale
                samePTrialid += 1
            elif ptrial_order[pTrial]==0:
                if side_diff_prac[diffPTrialid] == 1: #left
                    xPosition = -(width*x_scale)
                elif side_diff_prac[diffPTrialid] == 0: #right
                    xPosition = width*x_scale
                diffPTrialid += 1
        elif int(expInfo['position']) == 1:
            xPosition = -(width*x_scale)
        elif int(expInfo['position']) == '3':
            xPosition = width*x_scale

        thisExp.addData('pfix_switches', pfix_switch[pTrial])
        thisExp.addData('Pside', xPosition)
        thisExp.addData('ptrial_type1S0D',ptrial_order[pTrial])
        thisExp.addData('ptarget',prac_target)
        thisExp.addData('pprobe',prac_probe)
    ImageComponent image
      image [set every repeat] = $prac_target
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent text_6
      color [set every repeat] = $pfix_color
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine prac_probe
    ImageComponent image_2
      image [set every repeat] = $prac_probe
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent text_7
      color [set every repeat] = $pfix_color
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.2
      text = +
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    KeyboardComponent prac_resp
      allowedKeys = 'f','j'
      correctAns = $pracCorr
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
      storeCorrect = True
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    KeyboardComponent prac_fix_resp
      allowedKeys = 'space',
      correctAns = $corrPfix
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4
      storeCorrect = True
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  Routine prac_feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feedIM =''
        if prac_resp.keys == pracCorr:
            if prac_fix_resp.keys == corrPfix:
                feedIM = 'Stimuli/greenCheck.png'
                prac_msg = 'Well done!'
            elif prac_fix_resp.keys != corrPfix:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, your image response was right but the cross response was wrong.'
        elif prac_resp.keys != pracCorr:
            if prac_fix_resp.keys == corrPfix:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, your cross response was right but the image response was wrong.'
            elif prac_fix_resp.keys != corrPfix:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, both responses were wrong.'

        print(prac_resp.keys)
        print(prac_fix_resp.keys)
        print(prac_msg)
      End Routine:
        pTrial = pTrial + 1
    ImageComponent image_3
      image [set every repeat] = $feedIM
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    TextComponent feedback_msg
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $prac_msg
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  Routine prac_instructions
    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        pracCorr=''
        corrFix =''
        pTrial = 0
        pfix_color_options = ['white','black']

        prac_paths=''
        samepTrials=''
        diffpTrials=''
        prac_paths = ['Stimuli/dory1.png','Stimuli/dory2.png','Stimuli/nemo1.jpg','Stimuli/nemo2.png']
        sameCount = 0
        diffCount = 0
        samepTrials = [0,1,2,3,1,3]
        shuffle(samepTrials)
        diffpTrials = [[0,1],[1,0],[0,1],[2,3],[3,2],[2,3]]
        shuffle(diffpTrials)
        ptrial_order = [0,0,0,0,0,0,1,1,1,1,1,1]
        shuffle(ptrial_order)

        corrpFix =''
        samePTrialid = 0
        diffPTrialid = 0
        numPTrials = 12
        pfixs_shuffled1 = [1,0,0,0]
        pfixs_shuffled2 = [1,0,0,1]
        shuffle(pfixs_shuffled1)
        shuffle(pfixs_shuffled2)
        pfix_switch = [0,0]+pfixs_shuffled1+pfixs_shuffled2+[0,0]
        side_same_prac = [0,0,0,1,1,1]
        side_diff_prac = [0,0,0,1,1,1]
      Begin JS Experiment:
        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        pracCorr = "";
        corrFix = "";
        pTrial = 0;
        pfix_color_options = ["white", "black"];
        prac_paths = "";
        samepTrials = "";
        diffpTrials = "";
        side_same_prac = "";
        side_diff_prac = "";
        samePTrialid = 0;
        diffPTrialid = 0;
        prac_paths = ["Stimuli/dory1.png", "Stimuli/dory2.png", "Stimuli/nemo1.jpg", "Stimuli/nemo2.png"];
        sameCount = 0;
        diffCount = 0;
        samepTrials = [0, 1, 2, 3, 1, 3];
        shuffle(samepTrials);
        diffpTrials = [[0, 1], [1, 0], [0,1], [2, 3], [3, 2], [2, 3]];
        shuffle(diffpTrials);
        ptrial_order = [0, 0, 0, 0, 0, 0, 1, 1, 1, 1, 1, 1];
        shuffle(ptrial_order);
        corrpFix = "";
        numPTrials = 12;
        pfix_switch = [0,0,shuffle_array([1,0,0,0]),shuffle_array([1,0,0,1]),0,0].flat();
        side_same_prac = [0, 0, 0, 1, 1, 1];
        side_diff_prac = [0, 0, 0, 1, 1, 1];
      Begin JS Routine:
        rand_Pstart = [0, 1];
        shuffle(rand_Pstart);
        pfix_color = pfix_color_options[rand_Pstart[0]];
      Begin Routine:
        rand_Pstart = [0,1]
        shuffle(rand_Pstart)
        pfix_color = pfix_color_options[rand_Pstart[0]]
  Routine prePrac1
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        prePrac1 = 'Designs/prac_instr1.png'

        prePracTargetImg1 = 'Stimuli/dory1.png'
        prePracProbeImg1 = 'Stimuli/dory2.png'

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            xPosition = (width*x_scale)
        elif int(expInfo['position']) == 1:
            xPosition = -(width*x_scale)
        elif int(expInfo['position']) == '3':
            xPosition = width*x_scale
    ImageComponent prac_instr1
      image [set every repeat] = $prePrac1
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_9
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine prePrac2
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['design']) < 5:
            prePrac2 = 'Designs/prac_instr2_1234.png'
            prePrac1Corr = 'j'
        elif int(expInfo['design']) > 4:
            prePrac2 = 'Designs/prac_instr2_5678.png'
            prePrac1Corr = 'f'

        prePracTargetImg2 = 'Stimuli/nemo2.png'
        prePracProbeImg2 = 'Stimuli/nemo2.png'
    ImageComponent prac_instr2
      image [set every repeat] = $prePrac2
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.5
      texture resolution = 512
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    KeyboardComponent prePrac1Resp
      allowedKeys = 'f','j'
      correctAns = $prePrac1Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine prePrac3
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if prePrac1Resp.keys == prePrac1Corr:
            prePrac3 = 'Designs/prac_instr3_corr.png'
        elif prePrac1Resp.keys != prePrac1Corr:
            prePrac3 = 'Designs/prac_instr3_wrong.png'

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            xPosition = -(width*x_scale)
        elif int(expInfo['position']) == 1:
            xPosition = -(width*x_scale)
        elif int(expInfo['position']) == '3':
            xPosition = width*x_scale
    ImageComponent prac_instr3_feedback
      image [set every repeat] = $prePrac3
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_11
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prePrac4
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['design']) < 5:
            prePrac4 = 'Designs/prac_instr4_1234.png'
            prePrac2Corr = 'f'
            prePracFix = 'space'
        elif int(expInfo['design']) > 4:
            prePrac4 = 'Designs/prac_instr4_5678.png'
            prePrac2Corr = 'j'
            prePracFix = 'space'
    ImageComponent prac_instr4
      image [set every repeat] = $prePrac4
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    KeyboardComponent key_resp_10
      allowedKeys = 'space',
      correctAns = $prePracFix
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    KeyboardComponent key_resp_13
      allowedKeys = 'f','j'
      correctAns = $prePrac2Corr
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine prePrac5
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['design']) < 5:
            prePrac5 = 'Designs/prac_instr5_1234.png'
        elif int(expInfo['design']) > 4:
            prePrac5 = 'Designs/prac_instr5_5678.png'
    ImageComponent prac_instr5
      image [set every repeat] = $prePrac5
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_12
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prePrac1_1
    ImageComponent image_6
      image [set every repeat] = $prePracTargetImg1
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = +
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    ImageComponent image_7
      image [set every repeat] = $prePracProbeImg1
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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  Routine prePrac3_2
    ImageComponent image_8
      image [set every repeat] = $prePracTargetImg2
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent text_9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = +
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    ImageComponent image_9
      image [set every repeat] = $prePracProbeImg2
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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Flow
  Routine screen_scale
  Routine prePrac1
  Routine prePrac1_1
  Routine prePrac2
  Routine prePrac3
  Routine prePrac3_2
  Routine prePrac4
  Routine prePrac5
  Routine prac_instructions
  LoopInitiator pTrials loopType="TrialHandler"
    loopType = random
    nReps = $numPTrials
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    Routine prac_target
    Routine prac_probe
    Routine prac_feedback
  LoopTerminator pTrials
  Routine startInstruct
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $design_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instrBlock
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = $numTrials
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      Routine target_img
      Routine ISI_fix
      Routine probe_img
      Routine trial_resp
    LoopTerminator trials
    Routine feedback
  LoopTerminator blocks
  Routine EndScreen
